PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = word priming 
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Sumit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'table'},
      {'study_word': 'bottle'},
      {'study_word': 'laptop'},
      {'study_word': 'earrings'},
      {'study_word': 'shoes'},
      {'study_word': 'camera'},
      {'study_word': 'key'},
      {'study_word': 'pillow'},
      {'study_word': 'chair'},
      {'study_word': 'apple'},
      {'study_word': 'brick'},
      {'study_word': 'brush'},
      {'study_word': 'tiger'},
      {'study_word': 'spoon'},
      {'study_word': 'belt'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'l_o_'},
      {'test': 'pa_e_'},
      {'test': '_ab_e'},
      {'test': 'c_oc_l_t_'},
      {'test': 'l_p_o_'},
      {'test': 'sh__s'},
      {'test': '_en_i_'},
      {'test': 'e_r_i_g_'},
      {'test': '_ak_'},
      {'test': '_ot_le'},
      {'test': 'h_m__r'},
      {'test': '_ey'},
      {'test': 't_ee'},
      {'test': '_oa_'},
      {'test': 'br_c_'},
      {'test': 's_oo_'},
      {'test': 'b_n__a'},
      {'test': '_e_t'},
      {'test': '_gg_'},
      {'test': '__mb'},
      {'test': 'p_l_ow'},
      {'test': 'ch_i_'},
      {'test': '_ou_e'},
      {'test': 't_g_r'},
      {'test': 'co_t'},
      {'test': 'b_us_'},
      {'test': 'a_pl_'},
      {'test': 'f_u_t'},
      {'test': 'ca_e_a'},
      {'test': 'm__k'}]
    Routine test
  LoopTerminator trials_2
